PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'../results/%s_%s_run%s_%s' % (expInfo['participant'], expName, expInfo['run'], expInfo['date'])
  Experiment info = {'participant': 'pilot01', 'run': '1'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1536, 960]
  expName = auditory_semantic_1back_pilot
  keyboardBackend = ioHub
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Routines
  Routine setup
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    CodeComponent setup_code
      Code Type = Py
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      Begin Experiment:
        from psychopy import core, logging

        # global clock for logging
        globalClock = core.Clock()
        logging.setDefaultClock(globalClock)

        # run-level clock
        runClock = core.Clock()
  Routine instructions
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    CodeComponent instructions_code
      Code Type = Py
      Begin Routine:
        import io
        import re

        # Load instruction texts once
        if 'instr_dict' not in globals():
            raw = io.open("resources/instructions/instr_pl.txt", encoding="utf-8").read()
            parts = re.split(
                r'^\[(GENERAL_1|GENERAL_2|GENERAL_3|CON|ABS|BASE)\]\s*$',
                raw,
                flags=re.MULTILINE
            )
            globals()['instr_dict'] = {
                parts[i]: parts[i + 1].strip()
                for i in range(1, len(parts), 2)
            }

        # Choose which GENERAL page to show in this loop iteration
        page_num = instr_pages.thisN + 1   # 1..3
        general_instruction = globals()['instr_dict'].get(
            f"GENERAL_{page_num}",
            f"BŁĄD: brak sekcji [GENERAL_{page_num}] w instr_pl.txt"
        )
    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $general_instruction
      units = height
      wrapWidth = 2.0
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    KeyboardComponent instructions_key
      allowedKeys = 'a','b','c','d','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine wait_for_trigger
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    CodeComponent trigger_code
      Code Type = Py
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      Begin Routine:
        # manual run selection from the startup dialog
        run_id = int(expInfo["run"])

        # choose conditions file for blocks loop
        if run_id == 1:
            blocks_file = "resources/lists/blocks_run1.csv"
        elif run_id == 2:
            blocks_file = "resources/lists/blocks_run2.csv"
        else:
            raise ValueError("expInfo['run'] must be 1 or 2.")

        runClock.reset()
    KeyboardComponent trigger_key
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dummy_TR
    RoutineSettingsComponent dummy_TR
      stopVal [duration (s)] = 8.0
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    TextComponent dummy_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6.0
      text = Oczekiwanie na skaner
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  Routine block_start
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    CodeComponent block_start_code
      Code Type = Py
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      Begin Experiment:
        block_instruction = ""
      Begin Routine:
        # Reset run clock once (first block only)
        if blocks.thisN == 0:
            runClock.reset()

        # Block onset (time since start of run)
        block_onset = runClock.getTime()

        import io
        import re

        # Load instruction texts once
        if 'instr_dict' not in globals():
            raw = io.open("resources/instructions/instr_pl.txt", encoding="utf-8").read()
            parts = re.split(
                r'^\[(GENERAL_1|GENERAL_2|GENERAL_3|CON|ABS|BASE)\]\s*$',
                raw,
                flags=re.MULTILINE
            )
            globals()['instr_dict'] = {
                parts[i]: parts[i + 1].strip()
                for i in range(1, len(parts), 2)
            }

        # Block identifiers
        block_id = blocks.thisN + 1
        run_id = int(expInfo["run"])

        # Instruction text for this block
        block_instruction = globals()['instr_dict'].get(
            block_type,
            "BŁĄD: brak instrukcji dla bloku."
        )

        # Select trials file for this block
        if block_type == "CON":
            trials_file = f"resources/lists/con_run{run_id}.csv"
        elif block_type == "ABS":
            trials_file = f"resources/lists/abs_run{run_id}.csv"
        else:  # BASE
            trials_file = f"resources/lists/base_run{run_id}.csv"
      End Routine:
        thisExp.addData("block_onset", block_onset)
    TextComponent block_instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6.0
      text [set every repeat] = $block_instruction
      units = height
      wrapWidth = 1.2
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  Routine trial
    RoutineSettingsComponent trial
      stopVal [duration (s)] = 3.0
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    CodeComponent trial_timing
      Code Type = Py
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      Begin Routine:
        # Reset response container for this trial
        resp.keys = None
        resp.rt = None

        # IDs (run is chosen manually in the dialog)
        run_id = int(expInfo["run"])
        block_id = blocks.thisN + 1

        # Trial counters
        trial_index0 = trials.thisN          # 0-based
        trial_index1 = trial_index0 + 1      # 1-based (for readability)
        is_first_in_block = int(trial_index0 == 0)

        # Time since start of run (runClock was reset once, after dummy TR)
        trial_onset = runClock.getTime()

        # Prompt text depends on block type
        if block_type == "CON":
            resp_prompt_text = "MNIEJSZY  ←        →  WIĘKSZY"
        elif block_type == "ABS":
            resp_prompt_text = "MNIEJ WAŻNE  ←        →  WAŻNIEJSZE"
        else:  # BASE
            resp_prompt_text = "DOWOLNY PRZYCISK"

        # Store a copy of the filename actually used
        stim_file_used = stimFile

        # Save to CSV
        thisExp.addData("trial_onset", trial_onset)
        thisExp.addData("block_onset", block_onset)
        thisExp.addData("trial_index1", trial_index1)
        thisExp.addData("is_first_in_block", is_first_in_block)
        thisExp.addData("stim_file_used", stim_file_used)
        thisExp.addData("resp_prompt_text", resp_prompt_text)  # optional but useful
    TextComponent fixation
      letterHeight = 0.08
      pos = (0.0, 0)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.5
      text [set every repeat] = +
      units = height
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    CodeComponent trial_sound_code
      Code Type = Py
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      Begin Routine:
        # stimFile pochodzi z CSV (loop trials)
        stim_sound.setSound(stimFile, secs=1.5, hamming=False)
        stim_sound.setVolume(1.0, log=False)
      End Routine:
        stim_sound.stop()
    SoundComponent stim_sound
      hamming = False
      sound [set every repeat] = $stimFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      stopWithRoutine = False
      syncScreenRefresh = False
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    TextComponent resp_prompt
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [time (s)] = 3.0
      text [set every repeat] = $resp_prompt_text
      units = height
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    KeyboardComponent resp
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = False
      startVal [time (s)] = 1.5
      stopVal [time (s)] = 3.0
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  Routine end
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        run_id = int(expInfo["run"])

        if run_id == 1:
            end_message = (
                "Jesteśmy w połowie badania.\n\n\n"
                "Aby kontynuować, naciśnij dowolny przycisk."
            )
        else:
            end_message = (
                "To już koniec badania.\n"
                "Dziękuję za udział!\n\n"
                "Aby zakończyć, naciśnij dowolny przycisk."
            )
    TextComponent end_text
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text [set every repeat] = $end_message
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    KeyboardComponent end_key
      allowedKeys = 'a','b','c','d','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  LoopInitiator instr_pages loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine instructions
  LoopTerminator instr_pages
  Routine wait_for_trigger
  Routine dummy_TR
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $blocks_file
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('run_id', 1), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 1), ('block_type', 'CON')]),
      OrderedDict([('run_id', 1), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 1), ('block_type', 'ABS')]),
      OrderedDict([('run_id', 1), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 1), ('block_type', 'CON')]),
      OrderedDict([('run_id', 1), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 1), ('block_type', 'ABS')]),
      OrderedDict([('run_id', 1), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 1), ('block_type', 'CON')]),
      OrderedDict([('run_id', 1), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 1), ('block_type', 'ABS')]),
      OrderedDict([('run_id', 2), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 2), ('block_type', 'ABS')]),
      OrderedDict([('run_id', 2), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 2), ('block_type', 'CON')]),
      OrderedDict([('run_id', 2), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 2), ('block_type', 'ABS')]),
      OrderedDict([('run_id', 2), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 2), ('block_type', 'CON')]),
      OrderedDict([('run_id', 2), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 2), ('block_type', 'ABS')]),
      OrderedDict([('run_id', 2), ('block_type', 'BASE')]),
      OrderedDict([('run_id', 2), ('block_type', 'CON')])]
    Routine block_start
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $trials_file
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
